CellProfiler Pipeline: http://www.cellprofiler.org
Version:5
DateRevision:421
GitHash:
ModuleCount:34
HasImagePlaneDetails:False

Images:[module_num:1|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
    Filter images?:No filtering
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
Metadata:[module_num:2|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
    Extract metadata?:Yes
    Metadata data type:Text
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    Extraction method count:1
    Metadata extraction method:Extract from file/folder names
    Metadata source:File name
    Regular expression to extract from file name:^(?P<Row>[A-H]*) - (?P<Column>[0-9]*)\(fld (?P<Field>[0-9]*) wv (?P<Wavelength>.*) - (?P<Dye>.*)\)
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    Extract metadata from:All images
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
NamesAndTypes:[module_num:3|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
    Assign a name to:Images matching rules
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    Image set matching method:Order
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    Assignments count:3
    Single images count:4
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    Process as 3D?:No
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    Select the rule criteria:and (file does contain "UV") (file doesnot contain "XX") (or (file does contain "- 04") (file does contain "- 05") (file does contain "- 06") (file does contain "- 10") (file does contain "- 11") (file does contain "- 12"))
    Name to assign these images:DAPI
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "Green") (file doesnot contain "XX") (or (file does contain "- 04") (file does contain "- 05") (file does contain "- 06") (file does contain "- 10") (file does contain "- 11") (file does contain "- 12"))
    Name to assign these images:Cyto
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "Blue") (file doesnot contain "XX") (or (file does contain "- 04") (file does contain "- 05") (file does contain "- 06") (file does contain "- 10") (file does contain "- 11") (file does contain "- 12"))
    Name to assign these images:DNA_damage
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Single image location:file:/userhome/adamn/Documents/illumcorrectNPY/Cy5_IllumFunc_CellPaint_SKOV3andCis1DNAdamage.npy
    Name to assign this image:Cy5illumnpy
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    Select the image type:Illumination function
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    Single image location:file:/userhome/adamn/Documents/illumcorrectNPY/DAPI_IllumFunc_CellPaint_SKOV3WTandcis1DNAdamage.npy
    Name to assign this image:DAPIillumnpy
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    Select the image type:Illumination function
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    Single image location:file:/userhome/adamn/Documents/illumcorrectNPY/dsRed_IllumFunc_CellPaint_SKOV3andCis1DNAdamage.npy
    Name to assign this image:dsRedillumnpy
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    Select the image type:Illumination function
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    Single image location:file:/userhome/adamn/Documents/illumcorrectNPY/FITC_IllumFunc_CellPaint_SKOV3WTandcis1DNAdamage.npy
    Name to assign this image:FITCillumnpy
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    Select the image type:Illumination function
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
Groups:[module_num:4|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
    Do you want to group your images?:No
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
CorrectIlluminationApply:[module_num:5|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
    Select the input image:DAPI
    Name the output image:DAPI_illumcorr
    Select the illumination function:DAPIillumnpy
    Select how the illumination function is applied:Divide
    Select the input image:Cyto
    Name the output image:Cyto_illumcorr
    Select the illumination function:dsRedillumnpy
    Select how the illumination function is applied:Divide
    Select the input image:DNA_damage
    Name the output image:FITC_illumcore
    Select the illumination function:FITCillumnpy
    Select how the illumination function is applied:Divide
    Set output image values less than 0 equal to 0?:Yes
    Set output image values greater than 1 equal to 1?:Yes

RescaleIntensity:[module_num:6|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enabled:False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
    Select the input image:DAPI_illumcorr
    Name the output image:DAPI_RescaleIntensity
    Rescaling method:Stretch each image to use the full intensity range
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
RescaleIntensity:[module_num:7|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enabled:False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
    Select the input image:Cyto_illumcorr
    Name the output image:Cyto_RescaleIntensity
    Rescaling method:Stretch each image to use the full intensity range
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
RescaleIntensity:[module_num:8|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enabled:False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
    Select the input image:FITC_illumcore
    Name the output image:DNA_Dam_RescaleIntensity
    Rescaling method:Stretch each image to use the full intensity range
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
Smooth:[module_num:9|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
    Select the input image:DAPI_illumcorr
    Name the output image:DAPI_FilteredImage
    Select smoothing method:Circular Average Filter
    Calculate artifact diameter automatically?:No
    Typical artifact diameter:15
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
Smooth:[module_num:10|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
    Select the input image:FITC_illumcore
    Name the output image:DNA_Dam_FilteredImage
    Select smoothing method:Circular Average Filter
    Calculate artifact diameter automatically?:No
    Typical artifact diameter:15
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
IdentifyPrimaryObjects:[module_num:11|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
    Select the input image:DAPI_FilteredImage
    Name the primary objects to be identified:DNA
    Typical diameter of objects, in pixel units (Min,Max):10,80
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:Intensity
    Method to draw dividing lines between clumped objects:Intensity
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    Speed up by using lower-resolution image to find local maxima?:No
    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:12
    Threshold strategy:Global
    Thresholding method:Minimum Cross-Entropy
    Threshold smoothing scale:1.3488
    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.0,1.0
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    Log transform before thresholding?:No
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
IdentifyPrimaryObjects:[module_num:12|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
    Select the input image:DNA_Dam_FilteredImage
    Name the primary objects to be identified:Damaged_DNA
    Typical diameter of objects, in pixel units (Min,Max):10,80
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:Intensity
    Method to draw dividing lines between clumped objects:Intensity
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    Speed up by using lower-resolution image to find local maxima?:Yes
    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:12
    Threshold strategy:Global
    Thresholding method:Manual
    Threshold smoothing scale:1.3488
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    Manual threshold:0.03
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
IdentifySecondaryObjects:[module_num:13|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
    Select the input objects:DNA
    Name the objects to be identified:membrane
    Select the method to identify the secondary objects:Propagation
    Select the input image:Cyto_illumcorr
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    Regularization factor:0.05
    Discard secondary objects touching the border of the image?:Yes
    Discard the associated primary objects?:No
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    Fill holes in identified objects?:No
    Threshold setting version:12
    Threshold strategy:Global
    Thresholding method:Minimum Cross-Entropy
    Threshold smoothing scale:0.0
    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.0,1.0
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    Log transform before thresholding?:Yes
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
MaskObjects:[module_num:14|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
    Select objects to be masked:DNA
    Name the masked objects:Damaged_nuclei
    Mask using a region defined by other objects or by binary image?:Objects
    Select the masking object:Damaged_DNA
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    Handling of objects that are partially masked:Keep
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    Numbering of resulting objects:Renumber
    Invert the mask?:No

MaskObjects:[module_num:15|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
    Select objects to be masked:DNA
    Name the masked objects:No_damage_nuclei
    Mask using a region defined by other objects or by binary image?:Objects
    Select the masking object:Damaged_DNA
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    Handling of objects that are partially masked:Remove
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    Numbering of resulting objects:Renumber
    Invert the mask?:Yes

MaskObjects:[module_num:16|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
    Select objects to be masked:membrane
    Name the masked objects:ok_membrane
    Mask using a region defined by other objects or by binary image?:Objects
    Select the masking object:No_damage_nuclei
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    Handling of objects that are partially masked:Keep
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    Numbering of resulting objects:Renumber
    Invert the mask?:No

MaskObjects:[module_num:17|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
    Select objects to be masked:membrane
    Name the masked objects:damage_membrane
    Mask using a region defined by other objects or by binary image?:Objects
    Select the masking object:Damaged_nuclei
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    Handling of objects that are partially masked:Keep
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    Numbering of resulting objects:Renumber
    Invert the mask?:No

OverlayOutlines:[module_num:18|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enabled:False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
    Display outlines on a blank image?:No
    Select image on which to display outlines:FITC_illumcore
    Name the output image:OrigOverlay
    Outline display mode:Color
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    How to outline:Inner
    Select outline color:Red
    Select objects to display:Damaged_nuclei
    Select outline color:Green
    Select objects to display:No_damage_nuclei

OverlayOutlines:[module_num:19|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enabled:False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
    Display outlines on a blank image?:No
    Select image on which to display outlines:DAPI_illumcorr
    Name the output image:OrigOverlay
    Outline display mode:Color
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    How to outline:Inner
    Select outline color:Red
    Select objects to display:Damaged_nuclei
    Select outline color:#1EFF2C
    Select objects to display:No_damage_nuclei
    Select outline color:Blue
    Select objects to display:Damaged_nuclei

OverlayOutlines:[module_num:20|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enabled:False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
    Display outlines on a blank image?:No
    Select image on which to display outlines:Cyto_illumcorr
    Name the output image:OrigOverlay
    Outline display mode:Color
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    How to outline:Inner
    Select outline color:#1D950E
    Select objects to display:ok_membrane
    Select outline color:#58FF02
    Select objects to display:No_damage_nuclei
    Select outline color:pink
    Select objects to display:Damaged_nuclei
    Select outline color:red
    Select objects to display:damage_membrane

MeasureObjectSizeShape:[module_num:21|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
    Select object sets to measure:Damaged_nuclei, No_damage_nuclei, damage_membrane, ok_membrane
    Calculate the Zernike features?:No
    Calculate the advanced features?:No

SaveCroppedObjects:[module_num:22|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
    Objects:ok_membrane
    Directory:Default Output Folder sub-folder|\g<Well>\g<Field>
    Saved file format:16-bit tiff
    Do you want to save cropped images or object masks?:Images
    Image:Cyto_illumcorr

SaveCroppedObjects:[module_num:23|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
    Objects:damage_membrane
    Directory:Default Output Folder sub-folder|\g<Well>\g<Field>
    Saved file format:16-bit tiff
    Do you want to save cropped images or object masks?:Images
    Image:Cyto_illumcorr

SaveCroppedObjects:[module_num:24|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
    Objects:Damaged_nuclei
    Directory:Default Output Folder sub-folder|\g<Well>\g<Field>
    Saved file format:16-bit tiff
    Do you want to save cropped images or object masks?:Images
    Image:DAPI_illumcorr

SaveCroppedObjects:[module_num:25|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
    Objects:No_damage_nuclei
    Directory:Default Output Folder sub-folder|\g<Well>\g<Field>
    Saved file format:16-bit tiff
    Do you want to save cropped images or object masks?:Images
    Image:DAPI_illumcorr

ConvertObjectsToImage:[module_num:26|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
    Select the input objects:Damaged_nuclei
    Name the output image:Damagednuclei
    Select the color format:uint16
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
ConvertObjectsToImage:[module_num:27|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
    Select the input objects:No_damage_nuclei
    Name the output image:NodamageNuclei
    Select the color format:uint16
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
ConvertObjectsToImage:[module_num:28|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
    Select the input objects:damage_membrane
    Name the output image:DamageMembrane
    Select the color format:uint16
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
ConvertObjectsToImage:[module_num:29|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
    Select the input objects:ok_membrane
    Name the output image:OkMembrane
    Select the color format:uint16
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
ExportToSpreadsheet:[module_num:30|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
    Select the column delimiter:Comma (",")
    Add image metadata columns to your object data file?:Yes
    Add image file and folder names to your object data file?:Yes
    Select the measurements to export:Yes
    Calculate the per-image mean values for object measurements?:No
    Calculate the per-image median values for object measurements?:No
    Calculate the per-image standard deviation values for object measurements?:No
    Output file location:Default Output Folder|
    Create a GenePattern GCT file?:No
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    Export all measurement types?:Yes
    Press button to select measurements:Damaged_nuclei|Number_Object_Number,Damaged_nuclei|Parent_DNA,Damaged_nuclei|Location_Center_Y,Damaged_nuclei|Location_Center_X,No_damage_nuclei|Location_Center_X,No_damage_nuclei|Location_Center_Y,No_damage_nuclei|Parent_DNA,No_damage_nuclei|Number_Object_Number,ok_membrane|Number_Object_Number,ok_membrane|Location_Center_X,ok_membrane|Location_Center_Y,ok_membrane|Parent_membrane,damage_membrane|Location_Center_Y,damage_membrane|Location_Center_X,damage_membrane|Number_Object_Number,damage_membrane|Parent_membrane
    Representation of Nan/Inf:NaN
    Add a prefix to file names?:No
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    Overwrite existing files without warning?:Yes
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
SaveImages:[module_num:31|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
    Select the type of image to save:Mask
    Select the image to save:OkMembrane
    Select method for constructing file names:From image filename
    Select image name for file prefix:Cyto
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:\g<Well>\g<Field>Ok
    Saved file format:tiff
    Output file location:Default Output Folder sub-folder|mask
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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    Save with lossless compression?:Yes

SaveImages:[module_num:32|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
    Select the type of image to save:Mask
    Select the image to save:DamageMembrane
    Select method for constructing file names:From image filename
    Select image name for file prefix:Cyto
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:\g<Well>\g<Field>Damage
    Saved file format:tiff
    Output file location:Default Output Folder sub-folder|mask
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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    Save with lossless compression?:Yes

SaveImages:[module_num:33|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
    Select the type of image to save:Mask
    Select the image to save:Damagednuclei
    Select method for constructing file names:From image filename
    Select image name for file prefix:DAPI
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:\g<Well>\g<Field>Damage
    Saved file format:tiff
    Output file location:Default Output Folder sub-folder|mask
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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    Save with lossless compression?:Yes

SaveImages:[module_num:34|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
    Select the type of image to save:Mask
    Select the image to save:NodamageNuclei
    Select method for constructing file names:From image filename
    Select image name for file prefix:DAPI
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:\g<Well>\g<Field>Ok
    Saved file format:tiff
    Output file location:Default Output Folder sub-folder|mask
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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    Save with lossless compression?:Yes
